PsychoPy2experiment version="2024.2.5"
Settings
  Audio lib = ptb
  Enable Escape = False
  Experiment info = {'participant': '', 'computer_number': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = pix
  Window size (pixels) = [1920, 1080]
  color = white
  expName = line_categorization_exp_updated
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine consent
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    ButtonComponent agree_button
      bold = True
      color = black
      forceEndRoutine = True
      letterHeight = 20
      pos = (-75, -500)
      size = 100,100
      startVal [time (s)] = 0
      text = I agree
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    ButtonComponent decline_button
      bold = True
      color = black
      forceEndRoutine = True
      letterHeight = 20
      pos = 75,-500
      size = 100,100
      startVal [time (s)] = 0
      text = I do not agree
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    ImageComponent consent_img
      anchor = bottom-center
      image = consent.png
      pos = (0, -475)
      size = 825,1000
      startVal [time (s)] = 0.0
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    CodeComponent check_consent
      Code Type = Auto->JS
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      End Routine:
        if decline_button.numClicks==1:
            core.quit()
    MouseComponent mouse
      clickable = agree_button, decline_button
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine exp_setup
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    CodeComponent randomize_condition
      Code Type = Auto->JS
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      Before Experiment:
        import numpy as np
        exp_conditions_all=np.array(['centered','left','right'])
        exp_condition=np.random.choice(exp_conditions_all)

        if(exp_condition=='centered'):
            demo_in_condition_file='conditions/learn_demo_in_centered.txt'
            demo_out_condition_file='conditions/learn_demo_out_centered.txt'
            learn_condition_file='conditions/learn_trials_centered.csv'
            transfer_condition_file='conditions/transfer_trials_centered.csv'
        elif(exp_condition=='left'):
            demo_in_condition_file='conditions/learn_demo_in_left.txt'
            demo_out_condition_file='conditions/learn_demo_out_left.txt'
            learn_condition_file='conditions/learn_trials_left.csv'
            transfer_condition_file='conditions/transfer_trials_left.csv'
        elif(exp_condition=='right'):
            demo_in_condition_file='conditions/learn_demo_in_right.txt'
            demo_out_condition_file='conditions/learn_demo_out_right.txt'
            learn_condition_file='conditions/learn_trials_right.csv'
            transfer_condition_file='conditions/transfer_trials_right.csv'
    CodeComponent get_screen_size
      Code Type = Auto->JS
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      Begin Experiment:
        import psychopy
        screen_w=win.size[0]
        screen_h=win.size[1]
        screen_c_x=screen_w/2
        screen_c_y=screen_h/2
    CodeComponent define_trial_vars
      Code Type = Auto->JS
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      Before Experiment:
        dist_btw=200
        line_width=2
        demo_dur=30
        dist_btw_demo=25
    CodeComponent set_condition_in_data
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData('exp_condition',exp_condition)
    CodeComponent libraries
      Code Type = Auto->JS
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      Begin Experiment:
        import numpy as np
        import pandas as pd
  Routine welcome_screen
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    TextComponent welcome_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 20
      startVal [time (s)] = 0.0
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      text:
        Hello! Welcome to the experiment.

        Press space bar to begin the instructions.
    KeyboardComponent key_welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions1
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    TextComponent instr1_1
      color = black
      letterHeight = 20
      pos = 0,400
      startVal [time (s)] = 0.0
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      text:
        The stimuli:
        In this experiment, you will be asked to learn which objects belong to a category and which objects do not belong to the category.
    TextComponent instr_1_2
      color = black
      letterHeight = 20
      pos = 0,200
      startVal [time (s)] = 0.0
      text = The objects you will be asked to categorize are lines of varying length. Something like this:
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    PolygonComponent instr1_line1
      fillColor = black
      lineColor = black
      lineWidth = line_width
      ori = 90
      pos = 0, 75
      shape = line
      size = 90, line_width
      startVal [time (s)] = 0.0
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    PolygonComponent instr1_line2
      fillColor = black
      lineColor = black
      lineWidth = line_width
      ori = 90
      pos = 50, 10
      shape = line
      size = 150, line_width
      startVal [time (s)] = 0.0
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    KeyboardComponent instr_cont1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3.0
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    TextComponent instr_1_3
      color = black
      letterHeight = 20
      pos = 0,-100
      startVal [time (s)] = 0.0
      text = Press 'space' to continue.
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  Routine instructions2
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    TextComponent instr2_1
      color = black
      letterHeight = 20
      pos = 0,400
      startVal [time (s)] = 0.0
      text = The length of each line determines whether or not it belongs to the category.
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    TextComponent instr2_2
      color = black
      letterHeight = 20
      pos = 0,200
      startVal [time (s)] = 0.0
      text = There's some uncertainty involved in this category. You can't be 100% certain whether or not a line is in the category. BUT, some lines are far more likely to belong in the category than others.
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    TextComponent instr2_3
      color = black
      letterHeight = 20
      pos = 0,0
      startVal [time (s)] = 0.0
      text = Your job is to learn this category and then use what you have learned to decide if each line belongs in the category or not.
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    TextComponent instr2_4
      color = black
      letterHeight = 20
      pos = 0,-150
      startVal [time (s)] = 0.0
      text = Press 'space' to continue the instructions.
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    KeyboardComponent instr_cont2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3.0
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  Routine instructions3
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    TextComponent instr3_1
      color = black
      letterHeight = 30
      pos = 0,400
      startVal [time (s)] = 0.0
      text = Learning the category
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    TextComponent instr3_2
      color = black
      letterHeight = 20
      pos = 0,200
      startVal [time (s)] = 0.0
      text = We will begin by showing examples of lines that BELONG to the category and lines that DO NOT BELONG to the category. Please study these closely.
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    TextComponent instr3_3
      color = black
      letterHeight = 20
      pos = 0,0
      startVal [time (s)] = 0.0
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      text:
        After this, the learning trials will start. When each trial begins, you will be shown an line. Press 'u' on the keyboard if the line DOES belong to the category, and 'i' if it DOES NOT belong to the category.
    TextComponent instr3_4
      color = black
      letterHeight = 20
      pos = 0,-100
      startVal [time (s)] = 0.0
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      text:
        Press 'space' to continue the instructions
    KeyboardComponent instr_cont3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3.0
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    PolygonComponent fixation_cross
      fillColor = black
      lineColor = black
      lineWidth = 2
      shape = cross
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine instructions4
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    TextComponent instr4_1
      color = black
      letterHeight = 20
      pos = 0,400
      startVal [time (s)] = 0.0
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      text:
        At first you will be guessing. However, after each trial, you will be told whether or not your answer was correct and whether or not the line belongs in the category. This feedback will allow you to learn about the category.
    TextComponent instr4_2
      color = black
      letterHeight = 20
      pos = 0,200
      startVal [time (s)] = 0.0
      text = Don't get discouraged! Like we said, there is uncertainty in this category. Your job is not to perform perfectly, but to learn which types of stimuli are more likely to be in the category than others.
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    TextComponent instr4_3
      color = black
      letterHeight = 20
      pos = 0,0
      startVal [time (s)] = 0.0
      text = With that being said, please try do your best.
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    TextComponent instr4_4
      color = black
      letterHeight = 20
      pos = 0,-100
      startVal [time (s)] = 0.0
      text = Press 'space' to continue the instructions.
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    KeyboardComponent instr_cont4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3.0
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  Routine instructions5
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    TextComponent instr5_1
      color = black
      letterHeight = 20
      pos = 0,400
      startVal [time (s)] = 0.0
      text = There will be another section in which you will use what you've learned to make more categorizations - but instructions for that will come later.
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    TextComponent instr5_2
      color = black
      letterHeight = 20
      pos = 0,200
      startVal [time (s)] = 0.0
      text = If you have any questions, now would be a good time to ask the experimenter.
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    TextComponent instr5_3
      color = black
      letterHeight = 20
      pos = 0,0
      startVal [time (s)] = 0.0
      text = Press 'space' to continue the instructions.
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    KeyboardComponent instr_cont5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3.0
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  Routine instructions5_2
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    TextComponent instr5
      color = black
      letterHeight = 20
      pos = 0,400
      startVal [time (s)] = 0.0
      text = There will be another section in which you will use what you've learned to make more categorizations - but instructions for that will come later.
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    TextComponent instr5_4
      color = black
      letterHeight = 20
      pos = 0,200
      startVal [time (s)] = 0.0
      text = If you have any questions, now would be a good time to ask the experimenter.
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    TextComponent instr5_5
      color = black
      letterHeight = 20
      pos = 0,0
      startVal [time (s)] = 0.0
      text = Press 'space' to continue the instructions.
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    KeyboardComponent instr_cont5_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3.0
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  Routine instructions6
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    TextComponent instr6_1
      color = black
      letterHeight = 20
      pos = 0,400
      startVal [time (s)] = 0.0
      text = On the next screen, you will be shown examples of lines that belong to the category, and examples of lines that don't belong to the category.
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    TextComponent instr6_2
      color = black
      letterHeight = 20
      pos = 0,200
      startVal [time (s)] = 0.0
      text = Each set of lines will be on the screen for 30 seconds, and then the experiment will start. Please study these lines closely.
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    TextComponent instr6_3
      color = black
      letterHeight = 20
      pos = 0,0
      startVal [time (s)] = 0.0
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      text:
        Press 'space' to see examples of lines in the category.
    KeyboardComponent instr_cont6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3.0
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  Routine read_in_demo_vals
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    CodeComponent read_demo_stim
      Code Type = Auto->JS
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      Begin Routine:
        import numpy as np
        def read_demo(f):
            s=np.loadtxt(f)
            return s
        demo_in_vals = read_demo(demo_in_condition_file)
        demo_out_vals = read_demo(demo_out_condition_file)
  Routine learn_demo_in
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    CodeComponent learn_demo_code
      Code Type = Auto->JS
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      Begin Routine:
        win.units='pix'
        y_locs=0
        n_demo=demo_in_vals.size
        demo_in_vals_shuffled = np.random.choice(np.arange(0,n_demo),n_demo,replace=False)
        demo_out_vals_shuffled = np.random.choice(np.arange(0,n_demo),n_demo,replace=False)
        total_range = (dist_btw_demo * n_demo)/2
        x_locs_current = -total_range

        line_list = []

        for i in demo_in_vals_shuffled:
            x_locs_current=x_locs_current+dist_btw_demo
            line_list.append(visual.Line(win,
                             #size=(demo_in_vals_shuffled[i],line_width),
                             #pos=(x_locs_current, y_locs+demo_in_vals_shuffled[i]/2),
                             start=(x_locs_current,y_locs),
                             end=(x_locs_current,y_locs+demo_in_vals[i]),
                             lineWidth=line_width,
                             lineColor=(0,0,0),
                             colorSpace='rgb',
                             fillColor=(-1,-1,-1)))
        for i in line_list:
            i.draw()
        txt = visual.TextStim(win, 'Here are some lines that belong IN the Category.',color='black',
        pos=(0,-100))
        txt.draw()

        start_time = core.getTime()
        win.flip()
        core.wait(demo_dur)

        line_list = []
        total_range = (dist_btw_demo * n_demo)/2
        x_locs_current = -total_range

        for i in demo_out_vals_shuffled:
            x_locs_current=x_locs_current+dist_btw_demo
            line_list.append(visual.Line(win,
                             #size=(demo_in_vals_shuffled[i],line_width),
                             #pos=(x_locs_current, y_locs+demo_in_vals_shuffled[i]/2),
                             start=(x_locs_current,y_locs),
                             end=(x_locs_current,y_locs+demo_out_vals[i]),
                             lineWidth=line_width,
                             lineColor=(0,0,0),
                             colorSpace='rgb',
                             fillColor=(-1,-1,-1)))
        for i in line_list:
            i.draw()
        txt = visual.TextStim(win, 'Here are some lines that DO NOT belong in the Category.',
        color='black',
        pos=(0,-100))
        txt.draw()

        start_time = core.getTime()
        win.flip()
        core.wait(demo_dur)
  Routine learn_start
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    TextComponent learn_start_text
      color = black
      letterHeight = 20
      startVal [time (s)] = 0.0
      text = Press 'space' to start the experiment.
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    KeyboardComponent learn_start_reps
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = .5
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  Routine learn_trial
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    PolygonComponent line_learn
      anchor = bottom-center
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = line_width
      pos [set every repeat] = (0, 0)
      shape = line
      size [set every repeat] = line_width, line_len
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent learn_prompt
      color = black
      letterHeight = 20
      pos = (0,-100)
      startVal [time (s)] = 0.0
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      text:
        Does the line belong in the category?
        (U=YES, I=NO)
    KeyboardComponent key_resp
      allowedKeys = 'u','i'
      correctAns = $key_correct
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine learn_feedback
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    CodeComponent learn_feedback_text_code
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp.corr==1:
            learn_feedback_dur=1;
            learn_feedback_col="#008000"
            if distribution=="in":
                learn_feedback_text="You were correct! This line DOES belong in the category."
            elif distribution=="out":
                learn_feedback_text="You were correct! This line does NOT belong in the category."
        elif key_resp.corr==0:
            learn_feedback_dur=3;
            learn_feedback_col="#FF0000"
            if distribution=="in":
                learn_feedback_text="You were incorrect. This line DOES belong in the category."
            elif distribution=="out":
                learn_feedback_text="You were incorrect. This line does NOT belong in the category."
    TextComponent learn_feedback_text_display
      color [set every repeat] = $learn_feedback_col
      letterHeight = 20
      pos = (0,-100)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $learn_feedback_dur
      text [set every repeat] = $learn_feedback_text
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    PolygonComponent line_for_feedback
      anchor = bottom-center
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = line_width
      pos [set every repeat] = (0, 0)
      shape = line
      size [set every repeat] = line_width, line_len
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $learn_feedback_dur
      units = pix
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  Routine blank
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    TextComponent blank_200
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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  Routine transfer_instructions1
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    TextComponent tinstr1_1
      color = black
      letterHeight = 20
      startVal [time (s)] = 0.0
      text = The learning phase is now complete. Press 'space' to continue.
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    KeyboardComponent transfer_cont1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = .33
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  Routine transfer_instructions2
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    TextComponent tinstr2_1
      color = black
      letterHeight = 35
      pos = (0, 400)
      startVal [time (s)] = 0.0
      text = Using what you've learned
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    TextComponent tinstr2_2
      color = black
      letterHeight = 20
      pos = (0, 200)
      startVal [time (s)] = 0.0
      text = Now that you have learned the category, we will ask you to use what you've learned to categorize some new lines. During these trials you will be presented with multiple lines and you will determine the line that BEST belongs to the category.
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    TextComponent tinstr2_3
      color = black
      letterHeight = 20
      startVal [time (s)] = 0.0
      text = The category is the SAME as you learned in training. The only difference is now you are choosing between multiple options, rather than just one. You will still receive feedback after each choice.
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    TextComponent tinstr2_4
      color = black
      letterHeight = 20
      pos = (0, -100)
      startVal [time (s)] = 0.0
      text = Please remember to try your best.
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    TextComponent tinstr2_5
      color = black
      letterHeight = 20
      pos = (0, -200)
      startVal [time (s)] = 0.0
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      text:
        Thank you, and good luck!
        Press 'space' to continue
    KeyboardComponent transfer_cont2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 4.0
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  Routine transfer_instructions3
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    TextComponent tinstr3_1
      color = black
      letterHeight = 20
      pos = (0, -100)
      startVal [time (s)] = 0.00
      text = Press 'space' to continue to the next phase of the experiment.
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    KeyboardComponent transfer_cont3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine transfer_trinary_feedback
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    CodeComponent transfer_trinary_text_code
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp_transfer_trinary.corr==1:
            transfer_trinary_feedback_dur=1;
            transfer_trinary_feedback_col="#008000"
            transfer_trinary_feedback_text="Correct!"
        elif key_resp_transfer_trinary.corr==0:
            transfer_trinary_feedback_dur=2;
            transfer_trinary_feedback_col="#FF0000"
            transfer_trinary_feedback_text="Incorrect."
    TextComponent transfer_trinary_feedback_text_display
      color [set every repeat] = $transfer_trinary_feedback_col
      letterHeight = 20
      pos [set every repeat] = (0,-150)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $transfer_trinary_feedback_dur
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      text [set every repeat]:
        $transfer_trinary_feedback_text
  Routine transfer_trial_binary
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    PolygonComponent line_1_binary
      anchor = bottom-center
      fillColor = black
      lineColor = black
      lineWidth = line_width
      pos [set every repeat] = (-dist_btw/2,0)
      shape = line
      size [set every repeat] = (line_width,stim_1_phy_shuffled)
      startVal [time (s)] = 0.0
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    PolygonComponent line_2_binary
      anchor = bottom-center
      fillColor = black
      lineColor = black
      lineWidth = line_width
      pos [set every repeat] = (dist_btw/2, 0)
      shape = line
      size [set every repeat] = (line_width,stim_2_phy_shuffled)
      startVal [time (s)] = 0.0
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    TextComponent line_1_label_binary
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 20
      pos = (-dist_btw/2, -30)
      startVal [time (s)] = 0.0
      text = J
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    TextComponent line_2_label_binary
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 20
      pos = (dist_btw/2, -30)
      startVal [time (s)] = 0.0
      text = K
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    TextComponent transfer_binary_prompt
      color = black
      letterHeight = 20
      pos = (0,-150)
      startVal [time (s)] = 0.0
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      text:
        Which line is most likely to belong in the category?
        J or K?
    KeyboardComponent key_resp_transfer_binary
      allowedKeys = 'j','k'
      correctAns = 'k'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent check_correct_binary
      Code Type = Auto->JS
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      End Routine:
        if(key_resp_transfer_binary.keys[0] ==  key_correct_transfer_binary_1):
            key_resp_transfer_binary.corr=1
        elif (key_resp_transfer_binary.keys[0] == key_correct_transfer_binary_2):
            key_resp_transfer_binary.corr=1
        else:
            key_resp_transfer_binary.corr=0

        thisExp.addData('key_resp_transfer_binary.corr',key_resp_transfer_binary.corr)
  Routine transfer_binary_feedback
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    CodeComponent transfer_binary_feedback_text_code
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp_transfer_binary.corr==1:
            transfer_binary_feedback_dur=1;
            transfer_binary_feedback_col="#008000"
            transfer_binary_feedback_text="Correct!"
        elif key_resp_transfer_binary.corr==0:
            transfer_binary_feedback_dur=2;
            transfer_binary_feedback_col="#FF0000"
            transfer_binary_feedback_text="Incorrect."
    TextComponent transfer_binary_feedback_text_display
      color [set every repeat] = $transfer_binary_feedback_col
      letterHeight = 20
      pos = (0,-150)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $transfer_binary_feedback_dur
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      text [set every repeat]:
        $transfer_binary_feedback_text
  Routine exp_finished
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    TextComponent exp_finished_txt1
      color = black
      letterHeight = 20
      pos = (0, 400)
      startVal [time (s)] = 0.0
      text = You have now reached the end of the experiment. Thank you for participating!
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    TextComponent exp_finished_txt2
      color = black
      letterHeight = 20
      pos = (0, 200)
      startVal [time (s)] = 0.0
      text = On the next page is the debriefing form. You are welcome to read it for as long as you wish. Press 'space' when you have finished reading. This will close out the experiment, and you can let the researcher know that you are finished.
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    TextComponent exp_finished_txt3
      letterHeight = 20
      pos = 0,0
      startVal [time (s)] = 0.0
      text = Press 'space' to read the debriefing form.
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    KeyboardComponent cont_to_debrief
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.5
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  Routine debriefing
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    ImageComponent debrief_form
      anchor = bottom-center
      image = Judg_choice_debrief.png
      pos = (0, -500)
      size = (800, 1000)
      startVal [time (s)] = 0.0
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    KeyboardComponent end_debrief
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 4.0
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    CodeComponent log_import
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import logging
  Routine shuffle_trial_stimuli
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    CodeComponent shuffle_stim
      Code Type = Auto->JS
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      Begin Routine:
        import numpy as np
        from psychopy import logging
        if(set_type=='trinary'):
            stim_all_psy_unshuffled=np.array([stim_1_psy,stim_2_psy,stim_3_psy])
            stim_all_phy_unshuffled=np.array([stim_1_phy,stim_2_phy,stim_3_phy])
            stim_order=np.random.permutation(np.arange(3))
            stim_1_phy_shuffled=stim_all_phy_unshuffled[stim_order[0]]
            stim_2_phy_shuffled=stim_all_phy_unshuffled[stim_order[1]]
            stim_3_phy_shuffled=stim_all_phy_unshuffled[stim_order[2]]
            stim_1_psy_shuffled=stim_all_psy_unshuffled[stim_order[0]]
            stim_2_psy_shuffled=stim_all_psy_unshuffled[stim_order[1]]
            stim_3_psy_shuffled=stim_all_psy_unshuffled[stim_order[2]]
            if(stim_correct_2==0):
                key_correct_transfer_trinary_2='NA'
                if(stim_1_psy_shuffled==stim_correct_1):
                    key_correct_transfer_trinary_1='j'
                elif(stim_2_psy_shuffled==stim_correct_1):
                    key_correct_transfer_trinary_1='k'
                elif(stim_3_psy_shuffled==stim_correct_1):
                    key_correct_transfer_trinary_1='l'
            else:
                if(stim_1_psy_shuffled==stim_correct_1):
                    key_correct_transfer_trinary_1='j'
                elif(stim_2_psy_shuffled==stim_correct_1):
                    key_correct_transfer_trinary_1='k'
                elif(stim_3_psy_shuffled==stim_correct_1):
                    key_correct_transfer_trinary_1='l'
                if(stim_1_psy_shuffled==stim_correct_2):
                    key_correct_transfer_trinary_2='j'
                elif(stim_2_psy_shuffled==stim_correct_2):
                    key_correct_transfer_trinary_2='k'
                elif(stim_3_psy_shuffled==stim_correct_2):
                    key_correct_transfer_trinary_2='l'
            key_correct_transfer_binary_1='NA'
            key_correct_transfer_binary_2='NA'
            do_trinary=True
            do_binary=False
        elif(set_type=='binary'):
            stim_all_psy_unshuffled=np.array([stim_1_psy,stim_2_psy])
            stim_all_phy_unshuffled=np.array([stim_1_phy,stim_2_phy])
            stim_order=np.random.permutation(np.arange(2))
            stim_1_phy_shuffled=stim_all_phy_unshuffled[stim_order[0]]
            stim_2_phy_shuffled=stim_all_phy_unshuffled[stim_order[1]]
            stim_1_psy_shuffled=stim_all_psy_unshuffled[stim_order[0]]
            stim_2_psy_shuffled=stim_all_psy_unshuffled[stim_order[1]]
            if(stim_correct_2==0):
                key_correct_transfer_binary_2='NA'
                if(stim_1_psy_shuffled==stim_correct_1):
                    key_correct_transfer_binary_1='j'
                elif(stim_2_psy_shuffled==stim_correct_1):
                    key_correct_transfer_binary_1='k'
            else:
                key_correct_transfer_binary_1='j'
                key_correct_transfer_binary_2='k'
            do_trinary=False
            do_binary=True
            key_correct_transfer_trinary_1='NA'
            key_correct_transfer_trinary_2='NA'
            stim_3_phy_shuffled=0
            stim_3_psy_shuffled=0
      End Routine:
        thisExp.addData('stim_order',stim_order)
        thisExp.addData('stim_1_phy_shuffled',stim_1_phy_shuffled)
        thisExp.addData('stim_2_phy_shuffled',stim_2_phy_shuffled)
        thisExp.addData('stim_3_phy_shuffled',stim_3_phy_shuffled)
        thisExp.addData('stim_1_psy_shuffled',stim_1_psy_shuffled)
        thisExp.addData('stim_2_psy_shuffled',stim_2_psy_shuffled)
        thisExp.addData('stim_3_psy_shuffled',stim_3_psy_shuffled)
        thisExp.addData('key_correct_transfer_trinary_1',key_correct_transfer_trinary_1)
        thisExp.addData('key_correct_transfer_trinary_2',key_correct_transfer_trinary_2)
        thisExp.addData('key_correct_transfer_binary_1',key_correct_transfer_binary_1)
        thisExp.addData('key_correct_transfer_binary_2',key_correct_transfer_binary_2)
  Routine transfer_trial_trinary
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    PolygonComponent line_1_trinary
      anchor = bottom-center
      fillColor = black
      lineColor = black
      lineWidth = line_width
      pos [set every repeat] = (-dist_btw, 0)
      shape = line
      size [set every repeat] = (line_width,stim_1_phy_shuffled)
      startVal [time (s)] = 0.0
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    PolygonComponent line_2_trinary
      anchor = bottom-center
      fillColor = black
      lineColor = black
      lineWidth = line_width
      pos [set every repeat] = (0,0)
      shape = line
      size [set every repeat] = (line_width,stim_2_phy_shuffled)
      startVal [time (s)] = 0.0
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    PolygonComponent line_3_trinary
      anchor = bottom-center
      fillColor = black
      lineColor = black
      lineWidth = line_width
      pos [set every repeat] = (dist_btw, 0)
      shape = line
      size [set every repeat] = (line_width,stim_3_phy_shuffled)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_transfer_trinary
      allowedKeys = 'j','k','l'
      correctAns = 'k'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent line_1_trinary_label
      color = black
      letterHeight = 20
      pos = (-dist_btw, -30)
      startVal [time (s)] = 0.0
      text = J
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    TextComponent line_2_trinary_label
      color = black
      letterHeight = 20
      pos = (0, -30)
      startVal [time (s)] = 0.0
      text = K
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    TextComponent line_3_trinary_label
      color = black
      letterHeight = 20
      pos = (dist_btw, -30)
      startVal [time (s)] = 0.0
      text = L
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    TextComponent transfer_trinary_prompt
      color = black
      letterHeight = 20
      pos = (0,-150)
      startVal [time (s)] = 0.0
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      text:
        Which line is most likely to belong in the category?
        J or K?
    CodeComponent check_correct_trinary
      Code Type = Auto->JS
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      End Routine:
        if(key_resp_transfer_trinary.keys[0] ==  key_correct_transfer_trinary_1):
            key_resp_transfer_trinary.corr=1
        elif (key_resp_transfer_trinary.keys[0] == key_correct_transfer_trinary_2):
             key_resp_transfer_trinary.corr=1
        else:
             key_resp_transfer_trinary.corr=0

        thisExp.addData('key_resp_transfer_trinary.corr',key_resp_transfer_trinary.corr)
Flow
  Routine consent
  Routine exp_setup
  LoopInitiator instructions_loop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine instructions1
    Routine instructions2
    Routine instructions3
    Routine instructions4
    Routine instructions5
    Routine instructions6
  LoopTerminator instructions_loop
  Routine read_in_demo_vals
  LoopInitiator demo_loop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine learn_demo_in
    Routine learn_start
  LoopTerminator demo_loop
  LoopInitiator learn_trials loopType="TrialHandler"
    conditionsFile = $learn_condition_file
    loopType = random
    nReps = 1
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    Routine learn_trial
    Routine learn_feedback
    Routine blank
  LoopTerminator learn_trials
  LoopInitiator transfer_instructions_loop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine transfer_instructions1
    Routine transfer_instructions2
    Routine transfer_instructions3
  LoopTerminator transfer_instructions_loop
  LoopInitiator transfer_trials loopType="TrialHandler"
    conditionsFile = $transfer_condition_file
    loopType = random
    nReps = 3
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    Routine shuffle_trial_stimuli
    LoopInitiator transfer_trinary_dummy loopType="TrialHandler"
      loopType = random
      nReps = do_trinary
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      Routine transfer_trial_trinary
      Routine transfer_trinary_feedback
      Routine blank
    LoopTerminator transfer_trinary_dummy
    LoopInitiator transfer_binary_dummy loopType="TrialHandler"
      loopType = random
      nReps = do_binary
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      Routine transfer_trial_binary
      Routine transfer_binary_feedback
      Routine blank
    LoopTerminator transfer_binary_dummy
  LoopTerminator transfer_trials
  Routine exp_finished
  Routine debriefing
